CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:404
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This analysis pipe line is based on the ExampleSpeckles script on the Cell profiler website (https://cellprofiler.org/examples/#speckle-counting).', 'Images are tiff stack maximum intensity projections. Files are names by date of acquisition, position number, cell line and condition']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Metadata is extracted using regular expression from file names']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<date>.*)_p(?P<position>.*)_(?P<protein>.*)_(?P<condition>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Cells
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    Set intensity range from:Image bit-depth
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Image stacks are split into grayscale of the different channels']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
    Select the input image:Cells
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:RAD51
    Channel number:3
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    Image name:EdU

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the DAPI nuclear stain image. ']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MaskImage:[module_num:7|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:RAD51
    Name the output image:MaskedGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

OverlayObjects:[module_num:8|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notes:['Create an overlay that of foci on the nuclei, which is used as output image']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
    Input:DAPI
    Name the output image:DAPI_overlay
    Objects:Nuclei
    Opacity:0.3

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:MaskedGreen
    Name the primary objects to be identified:RAD51
    Typical diameter of objects, in pixel units (Min,Max):4,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectIntensity:[module_num:10|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notes:['Measure the intensity of the nuclei in the different channels against the nuclei image.']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
    Select images to measure:RAD51, EdU, DAPI
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:11|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notes:['Measure the intensity of the foci against the RAD51 image.']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
    Select images to measure:MaskedGreen
    Select objects to measure:RAD51

MeasureObjectSizeShape:[module_num:12|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notes:['Measure size and shape discriptors from the RAD51 foci']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
    Select object sets to measure:RAD51
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:14|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notes:['Establish a parent-child between the foci and the nuclei in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:Nuclei
    Child objects:RAD51
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
ExportToSpreadsheet:[module_num:15|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:DAPI_Foci_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:RAD51
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:RelateObjects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

DisplayDataOnImage:[module_num:16|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notes:['Create overlay image that report on the EdU intensity per segmented nucleus']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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_IntegratedIntensity_EdU
    Select the image on which to display the measurements:DAPI_overlay
    Text color:red
    Name the output image that has the measurements displayed:EdU_Int_DAPI
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Children_RAD51_Count
    Select the image on which to display the measurements:DAPI_overlay
    Text color:red
    Name the output image that has the measurements displayed:RAD51_count_DAPI
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_IntegratedIntensity_DAPI
    Select the image on which to display the measurements:DAPI_overlay
    Text color:red
    Name the output image that has the measurements displayed:Nuclei_intensity_DAPI
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:19|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:DAPI_overlay
    Text color:red
    Name the output image that has the measurements displayed:Nuclei_area_DAPI
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:20|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notes:['Save image with RAD51 foci count per nucleus']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
    Select the type of image to save:Image
    Select the image to save:RAD51_count_DAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cells
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:DAPI_RAD51_count
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:EdU_Int_DAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cells
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:DAPI_EdU_Int
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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